MacroName LD
# main macro for single particle data collection in Low Dose Mode
# update @ 2014-10-23 08:01:15

Echo ===> Running LD ...

Call Parameters

ResetClock

## position (X,Y)
RealignToNavItem 1
Copy A P
Call AlignToP

## Center Beam, assume AutoCenterBeam policy has been set up
AutoCenterBeam

## CycleTargetFocus, range is set in macro "Parameters".
Call CycleTargetFocus

## Autofocus, twice to be more accurate 
G
G

## Drift control
# drift control or not is set in Parameters 
# with skip set value, skip = 1 -> no drift control.
Loop 1
If $skip == 1
    continue 
Else
    Call Drift
Endif
EndLoop

# final shots, uncomment the next line for K2 camera
Loop 1
If $k2 == 1
    EarlyReturnNextShot $no_return
Else
    break
Endif
EndLoop

R

## save return image or not
Loop 1
if $save == 1
   S
Else 
   echo R image in SerialEM window is not saved ...
Endif
EndLoop

ReportClock
echo ----------------------------------------------------------------
