# (C) Nexperion e.U. - Solutions for Electron Microscopy 2017
# https://www.nexperion.net
# Requires SerialEM >= 3.6.0
# Last update April 13, 2017
# Acquires and saves images on "random" positions all over a grid. Originally used to assess contamination on cryo-TEM grids transferred in different ways without bias.

ScriptName GridSampler
SuppressReports 

# Parameters
RangeX = 1150
SamplesX = 9
RangeY = 1150
SamplesY = 9
ThresholdCounts = 500

Loop $SamplesX iX
  posX = ( $RangeX / ( $SamplesX - 1 ) ) *  ( $iX - 1 ) - ( $RangeX / 2 )
  Loop $SamplesY iY
    posY = ( $RangeY / ( $SamplesY - 1 ) ) *  ( $iY - 1 ) - ( $RangeY / 2 )
    MoveStageTo $posX $posY
    Trial
    ReportMeanCounts 
    if ( $ReportedValue1 > $ThresholdCounts )
      AutoFocus 
      Record
      Save
    Else
       echo Mean counts below threshold, skipping position
    EndIf
  EndLoop 
EndLoop 

SetColumnOrGunValve 0
