# (C) Nexperion e.U. - Solutions for Electron Microscopy 2016
# https://www.nexperion.net
# Last update January 13, 2017
# Runs the "Refine Eucentricity" routine until the change in Z falls below a pre-defined threshold (with a maximum of 10 attempts)

ScriptName FineEucentricity
SuppressReports 

# Parameters
MaximumZChange = 0.15

# Disable commands below to run interactively or if Trial has been confirmed to yield a good signal before
Trial
FlashDisplay 4 0.15
Pause Is the signal OK?

ReportStageXYZ
OldZ = $ReportedValue3

Loop 10
  Eucentricity 2
  ReportStageXYZ
  NewZ = $ReportedValue3
  If ABS ($NewZ - $OldZ) < $MaximumZChange 
    echo Z change below $MaximumZChange, all done
    break
  else
     OldZ = $NewZ
  endif
EndLoop

FlashDisplay 4 0.15
