# (C) Nexperion e.U. - Solutions for Electron Microscopy 2017
# https://www.nexperion.net
# Last update January 26, 2017
# Requires SerialEM >= 3.6.0
# Automatically determines the IlluminatedAreaLimits property for FEI Titan microscopes, testing spot sizes 1 to 11. This property needs to be set prior to any beam calibration.

ScriptName TitanIA

Pause Insert largest C2 aperture.
SetProperty UseIlluminatedAreaForC2 0

s = 1
Minimum = 999
Maximum = -999

ScreenDown
Loop 11
  SetSpotSize $s
  SetIlluminatedArea 5
  ReportIlluminatedArea
  if $ReportedValue1 > $Maximum
    Maximum = $ReportedValue1
  Endif
  SetIlluminatedArea -5
  ReportIlluminatedArea
  if $ReportedValue1 < $Minimum
    Minimum = $ReportedValue1
  Endif
  s = $s + 1
EndLoop

echo IlluminatedAreaLimits $Minimum $Maximum

SetProperty UseIlluminatedAreaForC2 1
pause Paste the resulting IlluminatedAreaLimits to your properties file and make sure UseIlluminatedAreaForC2 is ENABLED.
