ScriptName serialsections

# EMBL Heidelberg 2018  Martin Schorb

# use this script when transferring a large number of Navigator items from one section to another.
# duplicate the items and move them to the next section using the registration and transformation tools.
# Run the script on the duplicated items.  If you duplicated maps, select Realign to Item as well.
# It will acquire an anchor map at each position and name it with the original Label adding the new section index.


########## SETTINGS ########## 

# index of the next section 

sectionindex = 03

########## END SETTINGS ########## 


ReportNavItem
ChangeItemColor $navIndex 5

R
S
NewMap

StripEndingDigits navLabel newlabel

ReportNumTableItems 

label = $newlabel$sectionindex

ChangeItemLabel $reportedValue1 $label

