# After docking an AutoLoader cassette into a Titan Krios or Talos Arctica, his script will 1) wait for low temperature, 2) do inventory and 3) map all grids found by the AutoLoader inventory.

MacroName mapgrids

# Dock a cassette, setup full montage, change cooldown delay time and start this script
# When reloading a previously mapped grid, see SerialEM help in Navigator menu, Align with Rotation.

Delay 15 min # change cooldown wait time to match your local autoloader cooldown time
LongOperation In

Loop 12 index
   echo $index
   ReportSlotStatus $index
   if $RepVal1 == 1
      ScreenUp
      LoadCartridge $index	
      MoveStageTo 0 0 0
      SetColumnOrGunValve 1
      M
      NewMap	
   endif
endloop

CLoseFile
SetColumnOrGunValve 0

