MacroName test hole centering
# macro to test hole centering
# 1) Setup Low Dose.
# 2) Store a ref Low Dose View image in buffer P.
# 3) Go to some other hole.
# 4) Run the macro.
# 5) Does it center properly?
# Buffer P is expected to have refference hole image from Low Dose View
# Wim Hagen, EMBL Heidelberg 20170309
# Credits to Chen Xu

maxholeshift = 100 # hole-shift criterion in nanometers to take a second round 

echo ===> Running align to hole ...

V
AlignTo P
ReportAlignShift
echo hole shift 1 $RepVal5 $RepVal6
holeshift = sqrt $RepVal5 * $RepVal5 + $RepVal6 * $RepVal6

if $holeshift > $maxholeshift
   ResetImageShift
   V
   AlignTo P
   ReportAlignShift
   echo hole shift 2 $RepVal5 $RepVal6
endif

V
